/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": 
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml",
        "firewire-protocol": "broadcast-read-write",
        "close-all-relays": true
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "73298",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  -1.0,         0.0,          0.400],
                              [  0.0,  0.0,         1.0,          0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }           
        },
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "28002",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  -1.0,         0.0,          0.400],
                              [  0.0,  0.0,         1.0,          0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        },
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "28124"
        },
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "33281"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "scale": 0.4
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.4
            }
        }
    ]
}
